PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_cue
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cue
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    PolygonComponent polygon
      fillColor [set every repeat] = $colour
      shape = custom polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      vertices [set every repeat] = $stimulus
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    KeyboardComponent key_resp
      allowedKeys = 's', 'c', 't', 'a', 'r', 'b', 'g', 'y' 
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine instructions_2
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If the cue is 'x', then:-
        Press 's' if the shape is square
        Press 'c' if the shape is circle

        If the cue is 'y', then:-
        Press 'r' if the colour is red
        Press 'b' if the colour is blue

        Click 'space' to start!
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 15
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    conditions:
      [OrderedDict([('cue', 'x'), ('stimulus', 'square'), ('colour', 'red'), ('corr_resp', 's')]),
      OrderedDict([('cue', 'x'), ('stimulus', 'square'), ('colour', 'blue'), ('corr_resp', 's')]),
      OrderedDict([('cue', 'x'), ('stimulus', 'circle'), ('colour', 'red'), ('corr_resp', 'c')]),
      OrderedDict([('cue', 'x'), ('stimulus', 'circle'), ('colour', 'blue'), ('corr_resp', 'c')]),
      OrderedDict([('cue', 'y'), ('stimulus', 'square'), ('colour', 'red'), ('corr_resp', 'r')]),
      OrderedDict([('cue', 'y'), ('stimulus', 'square'), ('colour', 'blue'), ('corr_resp', 'b')]),
      OrderedDict([('cue', 'y'), ('stimulus', 'circle'), ('colour', 'red'), ('corr_resp', 'r')]),
      OrderedDict([('cue', 'y'), ('stimulus', 'circle'), ('colour', 'blue'), ('corr_resp', 'b')])]
    Routine trial
  LoopTerminator trials
