PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1000, 800]
  expName = word_prime
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'vase')]),
      OrderedDict([('study_word', 'tiger')]),
      OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'piano')]),
      OrderedDict([('study_word', 'laptop')]),
      OrderedDict([('study_word', 'class')]),
      OrderedDict([('study_word', 'happy')]),
      OrderedDict([('study_word', 'table')]),
      OrderedDict([('study_word', 'lunch')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('test', 'c_s_i_n')]),
      OrderedDict([('test', 'c_l_s_')]),
      OrderedDict([('test', '_r_e')]),
      OrderedDict([('test', 's_o_')]),
      OrderedDict([('test', 'I_f_')]),
      OrderedDict([('test', 'g_a_s')]),
      OrderedDict([('test', 'l_n_h')]),
      OrderedDict([('test', 'c_o_k')]),
      OrderedDict([('test', 'b_r_')]),
      OrderedDict([('test', 'p_n_i_')]),
      OrderedDict([('test', 'p_an_')]),
      OrderedDict([('test', '_ap_y')]),
      OrderedDict([('test', 't_g_r')]),
      OrderedDict([('test', 't_b_e')]),
      OrderedDict([('test', 'v_s_')]),
      OrderedDict([('test', 's_i_t')]),
      OrderedDict([('test', '_i_h_')]),
      OrderedDict([('test', 'c_k_')]),
      OrderedDict([('test', 'p_rr_t')]),
      OrderedDict([('test', 'b_o_')])]
    Routine test
  LoopTerminator trials_2
